opentrons/protocol-designer 8.1.1
schemaVersion: 8
protocolName: BioArt
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p20_single_gen2: {mount: left}
labwareLocationUpdate:
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {loadName: opentrons_96_filtertiprack_20ul, namespace: opentrons, version: 1, location: 10}
  Color Palette: {loadName: opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap, namespace: opentrons, version: 1, location: 11}
  Canvas: {loadName: corning_384_wellplate_112ul_flat, namespace: opentrons, version: 2, location: 8}
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - Blue
ingredLocations:
  Color Palette:
    Blue {volume: 1000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1.0
  path: single
  changeTip: perSource
  aspirate_labware: Color Palette
  aspirate_wells: A1
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  aspirate_mmFromBottom: 4
  dispense_labware: Canvas
  dispense_wells: E5
  dispense_mmFromBottom: 0.5
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: Color Palette, wellName: A1, wellLocation: {origin: bottom, offset: {z: 4, x: 0, y: 0}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: Canvas, wellName: E5, wellLocation: {origin: bottom, offset: {z: 0.5, x: 0, y: 0}}, flowRate: 3.78}
- moveToAddressableAreaForDropTip: {pipetteId: p20_single_gen2, addressableAreaName: fixedTrash, offset: {x: 0, y: 0, z: 0}, alternateDropLocation: true}
- dropTipInPlace: {pipetteId: p20_single_gen2}
